PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = current
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 2025.1.1
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = Pilot
  eyetracker = MouseGaze
  frameRateMsg = Comenzando...
  keyboardBackend = ioHub
  mgBlink = ['LEFT_BUTTON']
  mgMove = CONTINUOUS
  mgSaccade = 0.5
  runMode = 1
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Routines
  Routine hello
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    TextComponent text
      color = red
      letterHeight = 0.06
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0
      wrapWidth = 10
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      text:
        A continuación, te presentaremos una serie de imágenes.

        Debes elegir la imagen que mejor cumpla
        lo que la instrucción te indicará.
        Escucha con atención cada instrucción y
        trata de responder tan rápido como puedas.
    ButtonComponent buttonhello
      bold = True
      borderColor = black
      borderWidth = 1
      fillColor = red
      forceEndRoutine = True
      letterHeight = 0.08
      pos = 0,-0.25
      saveStartStop = False
      size = 0.45,0.25
      startVal [time (s)] = 0
      text = INICIAR
      timeRelativeTo = experiment
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    SoundComponent sound_1
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = Stimuli/Instructions/INTRO.ogg
      startVal [time (s)] = 0.0
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    CodeComponent code_start
      Code Type = Auto->JS
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      Before Experiment:
        import time
        from datetime import datetime
        import random
        import pandas as pd
      Begin Experiment:
        def build_rows(path, total_trials, group_col='clase', variant_col='variant', pair_col='pair_id', group_quota=None):

            df = pd.read_excel(path)
            g = df[group_col].astype(str).str.strip().str.lower()
            v = df[variant_col].astype(str).str.strip().str.lower()
            p = df[pair_col].astype(str).str.strip().str.lower()
            df = df.assign(_group=g, _variant=v, _pair=p)

            picked_idx = []
            used_pairs = set()

            for gv, q in group_quota.items():
                need_each = q // 2  # normal y reversed por grupo

                sub = df[df._group == gv]
                subN = sub[(sub._variant == 'normal') & (~sub._pair.isin(used_pairs))]
                subR = sub[(sub._variant == 'reversed') & (~sub._pair.isin(used_pairs))]

                # elegir pairs únicos para normal
                pairsN = subN._pair.drop_duplicates().tolist()
                random.shuffle(pairsN)
                chosenN = pairsN[:need_each]

                pickN = (subN[subN._pair.isin(chosenN)]
                         .groupby('_pair', group_keys=False)
                         .apply(lambda x: x.sample(n=1, random_state=None), include_groups=False))
                used_pairs.update(chosenN)

                # elegir pairs únicos para reversed (sin solapar con los anteriores)
                subR2 = sub[(sub._variant == 'reversed') & (~sub._pair.isin(used_pairs))]
                pairsR = subR2._pair.drop_duplicates().tolist()
                random.shuffle(pairsR)
                chosenR = pairsR[:need_each]

                pickR = (subR2[subR2._pair.isin(chosenR)]
                         .groupby('_pair', group_keys=False)
                         .apply(lambda x: x.sample(n=1, random_state=None)))
                used_pairs.update(chosenR)

                picked_idx.extend(pickN.index.tolist())
                picked_idx.extend(pickR.index.tolist())

            picked = df.loc[picked_idx].sample(frac=1.0, random_state=None)
            return ','.join(map(str, picked.index.tolist()))



        set_rows_ML = build_rows(
            "Stimuli/Müller-Lyer trials/ML_condition_file.xlsx",
            total_trials=18,
            group_col='name',
            variant_col='variant',
            pair_col='pair_id',
            group_quota={'control_inward': 6, 'control_outward': 6,  'misleading': 6}
        )

        set_rows_contrast = build_rows(
            "Stimuli/Contrast trials/Contrast_condition_file.xlsx",
            total_trials=15,
            group_col='name',
            variant_col='variant',
            pair_col='pair_id',
            group_quota={'control': 10, 'misleading': 5}
        )


        set_rows_ebbinghaus = build_rows(
            "Stimuli/Ebbinghaus trials/Ebbinghaus_condition_file.xlsx",
            total_trials=18,
            group_col='name',
            variant_col='variant',
            pair_col='pair_id',
            group_quota={'control_large': 6, 'control_small': 6,  'misleading': 6}
        )

        set_rows_kanizsa = build_rows(
            "Stimuli/Kanizsa trials/KN_condition_file.xlsx",
            total_trials=25,
            group_col='name',
            variant_col='variant',
            pair_col='pair_id',
            group_quota={'illusion_10': 5, 'illusion_20': 5, 'illusion_30': 5, 'illusion_40': 5,'illusion_50': 5}
        )


        set_rows_delboeuf = build_rows(
            "Stimuli/Delboeuf trials/Delboeuf_condition_file.xlsx",
            total_trials=18,
            group_col='name',
            variant_col='variant',
            pair_col='pair_id',
            group_quota={'control_large': 6, 'control_small': 6, 'misleading': 6}
        )

        set_rows_ponzo = build_rows(
            "Stimuli/Ponzo trials/Ponzo_condition_file.xlsx",
            total_trials=6,
            group_col='name',
            variant_col='variant',
            pair_col='pair_id',
            group_quota={'control': 6}
        )

        ponzo = pd.read_excel("Stimuli/Ponzo trials/Ponzo_condition_file.xlsx",)
        ponzo_compulsory = ponzo[ponzo['pair_id'] == 'ponzo_c']

        selected_row_indices = ponzo_compulsory.index.tolist()
        ponzo_compulsory_rows = ','.join(map(str, selected_row_indices))
        set_rows_ponzo = set_rows_ponzo + "," + ponzo_compulsory_rows
        print(set_rows_ponzo)

        set_rows_solitaire = build_rows(
            "Stimuli/Solitaire trials/Solitaire_condition_file.xlsx",
            total_trials=16,
            group_col='name',
            variant_col='variant',
            pair_col='pair_id',
            group_quota={'control':2, 'misleading': 14}
        )

        print("[DEBUG] ML rows   ->", set_rows_ML)
        print("[DEBUG] Contrast rows   ->", set_rows_contrast)
        print("[DEBUG] Ebbinghaus rows   ->", set_rows_ebbinghaus)
        print("[DEBUG] Kanizsa rows   ->", set_rows_kanizsa)
        print("[DEBUG] Delboeuf rows   ->", set_rows_delboeuf)
        print("[DEBUG] Ponzo rows   ->", set_rows_ponzo)
        print("[DEBUG] Solitaire rows   ->", set_rows_solitaire)
  Routine bye
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    TextComponent text_2
      color = -0.4902, -0.1765, 0.7647
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text = ¡GRACIAS!
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.5
      timeRelativeTo = experiment
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  Routine Contrast_illusion_INTRO
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    TextComponent contrast_intro_text
      color = royalblue
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 1
      wrapWidth = 20
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      text:
        Selecciona la imagen en la
        que el círculo sea
        ¡MÁS OSCURO!
    SoundComponent sound_4
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = Stimuli/Instructions/CONT_INTRO.ogg
      startVal [time (s)] = 1
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    ButtonComponent START_contrast
      bold = True
      borderColor = black
      borderWidth = 1
      fillColor = orangered
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = 0.3,0.15
      startVal [time (s)] = 1
      text = INICIAR
      timeRelativeTo = experiment
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  Routine ML_INTRO
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    TextComponent ml_intro_text
      color = -0.4902, -0.1765, 0.7647
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 1
      wrapWidth = 20
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      text:
        De las dos líneas que observarás
        a continuación,
        elige la ¡MÁS LARGA!
    SoundComponent sound_2
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = Stimuli/Instructions/MUL_INTRO.ogg
      startVal [time (s)] = 1
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    ButtonComponent START_ML
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, -0.4588, -1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = 0.3,0.15
      startVal [time (s)] = 1
      text = INICIAR
      timeRelativeTo = experiment
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  Routine mlintro2
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    TextComponent ml_intro_text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Trial II - Müller-Lyer Illusion
        Chose the LONGER line!
  Routine Ebbing_INTRO
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    TextComponent ebbing_intro_text
      color = royalblue
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 1
      wrapWidth = 20
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      text:
        Selecciona el círculo
         naranja de
        ¡MAYOR TAMAÑO!
    SoundComponent sound_5
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = Stimuli/Instructions/EBB_INTRO.ogg
      startVal [time (s)] = 1
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    ButtonComponent START_ebbing
      bold = True
      borderColor = black
      borderWidth = 1
      fillColor = orangered
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = 0.3, 0.15
      startVal [time (s)] = 1
      text = INICIAR
      timeRelativeTo = experiment
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  Routine MS_INTRO
    RoutineSettingsComponent MS_INTRO
      disabled = True
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    TextComponent MS_intro_text
      color = royalblue
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 1
      wrapWidth = 20
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      text:
        Elige aquella en la que notas
        ¡MAYOR MOVIMIENTO!
    SoundComponent sound_7
      forceEndRoutine = False
      saveStartStop = False
      sound = Stimuli/Instructions/MS_long.ogg
      startVal [time (s)] = 1
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    ButtonComponent START_MS
      bold = True
      borderColor = black
      borderWidth = 1
      fillColor = orangered
      forceEndRoutine = True
      letterHeight = 0.05
      pos = 0, -0.3
      saveStartStop = False
      size = 0.3, 0.15
      startVal [time (s)] = 1
      text = INICIAR
      timeRelativeTo = experiment
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  Routine Kanizsa_INTRO
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    TextComponent kanizsa_intro_text
      color = royalblue
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 1
      wrapWidth = 20
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      text:
        De las imágenes que
        aparecerán a continuación,
         elige aquella donde se forme un
        CUADRADO BLANCO
    SoundComponent sound_6
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = Stimuli/Instructions/KZ_INTRO.ogg
      startVal [time (s)] = 1
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    ButtonComponent START_KN
      bold = True
      borderColor = black
      borderWidth = 1
      fillColor = orangered
      forceEndRoutine = True
      letterHeight = 0.05
      pos = 0, -0.3
      saveStartStop = False
      size = 0.3, 0.15
      startVal [time (s)] = 1
      text = INICIAR
      timeRelativeTo = experiment
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  Routine TEST_ML
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    ImageComponent image_ML
      image [set every repeat] = $path
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    PolygonComponent LEFT_ML
      lineColor = red
      opacity = 0
      pos = -0.40,0
      saveStartStop = False
      shape = rectangle
      size = 0.60, 0.25
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    PolygonComponent RIGHT_ML
      lineColor = blue
      opacity = 0
      pos = 0.40, 0
      saveStartStop = False
      shape = rectangle
      size = 0.60, 0.25
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    MouseComponent mouse_ML
      clickable = LEFT_ML, RIGHT_ML
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    SoundComponent sound_3
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = Stimuli/Instructions/MUL_SHORT.ogg
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
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    EyetrackerRecordComponent ML_tracker
      actionType = Start and Stop
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      stopWithRoutine = False
      syncScreenRefresh = False
    RegionOfInterestComponent ROI_left_ML
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = -0.40,0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.60, 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
    RegionOfInterestComponent ROI_right_ML
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = 0.40, 0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.60, 0.25
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    KeyboardComponent key_resp
      allowedKeys = 'p'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      store = nothing
      syncScreenRefresh = False
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  Routine TEST_contrast
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    ImageComponent image_cont
      image [set every repeat] = $path
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    PolygonComponent LEFT_cont
      lineColor = red
      opacity = 0
      pos = -0.40,0
      saveStartStop = False
      shape = rectangle
      size = 0.75, 0.5
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    PolygonComponent RIGHT_cont
      lineColor = blue
      opacity = 0
      pos = 0.40, 0
      saveStartStop = False
      shape = rectangle
      size = 0.75, 0.5
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    MouseComponent mouse_cont
      clickable = LEFT_cont, RIGHT_cont
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    SoundComponent sound_8
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = Stimuli/Instructions/CONT_SHORT.ogg
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
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    EyetrackerRecordComponent contrast_tracker
      actionType = Start and Stop
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      stopWithRoutine = False
      syncScreenRefresh = False
    RegionOfInterestComponent ROI_LEFT_cont
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = -0.40,0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.75, 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    RegionOfInterestComponent ROI_RIGHT_cont
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = 0.40, 0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.75, 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    KeyboardComponent key_resp_3
      allowedKeys = 'p'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      store = nothing
      syncScreenRefresh = False
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  Routine TEST_ebbing
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    ImageComponent image_ebbing
      image [set every repeat] = $path
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    PolygonComponent RIGHT_ebbing
      lineColor = red
      opacity = 0
      pos = 0.36, 0
      saveStartStop = False
      shape = rectangle
      size = 0.54, 0.54
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    PolygonComponent LEFT_ebbing
      lineColor = blue
      opacity = 0
      pos = -0.36,0
      saveStartStop = False
      shape = rectangle
      size = 0.54, 0.54
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    MouseComponent mouse_ebbing
      clickable = LEFT_ebbing, RIGHT_ebbing
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    SoundComponent sound_9
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = Stimuli/Instructions/EBB_SHORT.ogg
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
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    EyetrackerRecordComponent ebbing_tracker
      actionType = Start and Stop
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      stopWithRoutine = False
      syncScreenRefresh = False
    RegionOfInterestComponent ROI_LEFT_ebbing
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = 0.36, 0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.54, 0.54
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    RegionOfInterestComponent ROI_RIGHT_ebbingroi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = -0.36,0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.54, 0.54
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    KeyboardComponent key_resp_4
      allowedKeys = 'p'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      store = nothing
      syncScreenRefresh = False
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  Routine TEST_MS
    RoutineSettingsComponent TEST_MS
      disabled = True
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    ImageComponent image_MS
      image [set every repeat] = $path
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    PolygonComponent LEFT_MS
      fillColor = red
      lineColor = red
      opacity = 0
      pos = -0.44,0
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    PolygonComponent RIGHT_MS
      fillColor = blue
      lineColor = blue
      opacity = 0
      pos = 0.44, 0
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    MouseComponent mouse_MS
      clickable = LEFT_MS, RIGHT_MS
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    SoundComponent sound_10
      forceEndRoutine = False
      saveStartStop = False
      sound = Stimuli/Instructions/MS_short.ogg
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
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    EyetrackerRecordComponent MS_tracker
      actionType = Start and Stop
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      stopWithRoutine = False
      syncScreenRefresh = False
    RegionOfInterestComponent ROI_LEFT_MS
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = -0.44, 0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    RegionOfInterestComponent ROI_RIGHT_MS
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = 0.44, 0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    KeyboardComponent key_resp_6
      allowedKeys = 'p'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      store = nothing
      syncScreenRefresh = False
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  Routine TEST_knzs
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    ImageComponent image_KN
      image [set every repeat] = $path
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    PolygonComponent LEFT_KN
      lineColor = red
      opacity = 0
      pos = -0.44,0
      saveStartStop = False
      shape = rectangle
      size = 0.8, 0.8
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    PolygonComponent RIGHT_KN
      lineColor = blue
      opacity = 0
      pos = 0.44, 0
      saveStartStop = False
      shape = rectangle
      size = 0.8, 0.8
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    MouseComponent mouse_KN
      clickable = LEFT_KN, RIGHT_KN
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    SoundComponent sound_11
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = Stimuli/Instructions/KZ_SHORT.ogg
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
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    EyetrackerRecordComponent Kanizsa_tracker
      actionType = Start and Stop
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      stopWithRoutine = False
      syncScreenRefresh = False
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    RegionOfInterestComponent ROI_LEFT_KN
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = -0.44,0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.8, 0.8
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    RegionOfInterestComponent ROI_RIGHT_KN
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = 0.44, 0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.8, 0.8
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    KeyboardComponent key_resp_5
      allowedKeys = 'p'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      store = nothing
      syncScreenRefresh = False
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  Routine pressspace
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    TextboxComponent Next_text
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.3
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Para ver la siguiente imagen
        Haz click sobre el CÍRCULO ROJO
    PolygonComponent Next_polygon
      fillColor = 1.0000, -0.4588, -1.0000
      lineColor = black
      saveStartStop = False
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent Next_mouse
      clickable = Next_polygon
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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    KeyboardComponent key_resp_2
      allowedKeys = 'p'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine trainingKZS
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    ImageComponent triangle
      image = Stimuli/Training/triang.png
      pos = (-0.5, 0.25)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent threefourth
      image = Stimuli/Training/whitesquare3p4.png
      pos = (0.3, 0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent twofourth
      image = Stimuli/Training/whitesquare2p4.png
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent whitesquare
      image = Stimuli/Training/whitesquare.png
      pos = (0.5, -0.15)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = whitesquare
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine trainingKZS_2
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    ImageComponent triangle_2
      image = Stimuli/Training/triang.png
      ori = 23
      pos = -0.3, -0.25
      saveStartStop = False
      size = 0.5,0.5
      startVal [time (s)] = 0.0
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    ImageComponent threefourth_2
      image = Stimuli/Training/whitesquare3p4.png
      ori = 350
      pos = (0.5, -0.15)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent twofourth_2
      image = Stimuli/Training/whitesquare2p4.png
      pos = (0.3, 0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent whitesquare_2
      image = Stimuli/Training/whitesquare.png
      ori = 45
      pos = (-0.5, 0.25)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      clickable = whitesquare_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine motor_eval
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    PolygonComponent poly_2
      fillColor = -0.4118, -1.0000, 0.0196
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0, -0.20)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_4
      clickable = poly_1, poly_2, poly_3, poly_4
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine clickcircle1
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    TextboxComponent circle_click_text1
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Haz click sobre el CÏRCULO
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    PolygonComponent circle_click
      fillColor = green
      lineColor = green
      pos = (0.25, 0.22)
      saveStartStop = False
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    MouseComponent circle_mouse1
      clickable = circle_click
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine clickcircle2
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    PolygonComponent circle_click_2
      fillColor = green
      lineColor = green
      pos = (-0.3, 0.1)
      saveStartStop = False
      shape = circle
      size = (0.28, 0.28)
      startVal [time (s)] = 0.0
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    TextboxComponent circle_click_text1_2
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Haz click sobre el CÏRCULO
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    MouseComponent circle_mouse2
      clickable = circle_click_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine clickcircle3
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    PolygonComponent circle_click_3
      fillColor = green
      lineColor = green
      pos = (0.2, -0.45)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextboxComponent circle_click_text1_3
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Haz click sobre el CÏRCULO
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    MouseComponent circle_mouse3
      clickable = circle_click_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine clickcircle5
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    PolygonComponent circle_click_5
      fillColor = green
      lineColor = green
      pos = (-0.25, 0.1)
      saveStartStop = False
      shape = circle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
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    TextboxComponent circle_click_text1_5
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Haz click sobre el CÏRCULO
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    MouseComponent circle_mouse5
      clickable = circle_click_5
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine clickcircle4
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    PolygonComponent circle_click_4
      fillColor = green
      lineColor = green
      pos = (0.45, 0.4)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextboxComponent circle_click_text1_4
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Haz click sobre el CÏRCULO
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    MouseComponent circle_mouse4
      clickable = circle_click_4
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine clickcircle6
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    PolygonComponent circle_click_6
      fillColor = green
      lineColor = green
      pos = (-0.45, -0.3)
      saveStartStop = False
      shape = circle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
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    TextboxComponent circle_click_text1_6
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Haz click sobre el CÏRCULO
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    MouseComponent circle_mouse6
      clickable = circle_click_6
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine clickcircle7
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    PolygonComponent circle_click_7
      fillColor = green
      lineColor = green
      pos = (-0.4, 0.36)
      saveStartStop = False
      shape = circle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
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    TextboxComponent circle_click_text1_7
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Haz click sobre el CÏRCULO
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    MouseComponent circle_mouse7
      clickable = circle_click_7
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine clickcircle8
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    PolygonComponent circle_click_8
      fillColor = green
      lineColor = green
      pos = (0.1, 0.38)
      saveStartStop = False
      shape = circle
      size = (0.055, 0.055)
      startVal [time (s)] = 0.0
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    TextboxComponent circle_click_text1_8
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Haz click sobre el CÏRCULO
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    MouseComponent circle_mouse8
      clickable = circle_click_8
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine clickcircle9
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    PolygonComponent circle_click_9
      fillColor = green
      lineColor = green
      pos = (0.4, -0.42)
      saveStartStop = False
      shape = circle
      size = (0.055, 0.055)
      startVal [time (s)] = 0.0
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    TextboxComponent circle_click_text1_9
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Haz click sobre el CÏRCULO
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    MouseComponent circle_mouse9
      clickable = circle_click_9
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine clickcircle10
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    PolygonComponent circle_click_10
      fillColor = green
      lineColor = green
      pos = (0.43, 0.42)
      saveStartStop = False
      shape = circle
      size = (0.055, 0.055)
      startVal [time (s)] = 0.0
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    TextboxComponent circle_click_text1_10
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Haz click sobre el CÏRCULO
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    MouseComponent circle_mouse10
      clickable = circle_click_10
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine longerline_1
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    ImageComponent longerline1pic
      image = Stimuli/Training/longerline1.jpg
      saveStartStop = False
      size = 2,1
      startVal [time (s)] = 0.0
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    PolygonComponent longerline1area
      pos = -0.23, -0.30
      saveStartStop = False
      shape = rectangle
      size = (0.8, 0.32)
      startVal [time (s)] = 0.0
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    TextboxComponent Longerlinetext1
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Elige la LINEA MÁS LARGA!
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    MouseComponent longerlinemouse1
      clickable = longerline1area
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine longerline_3
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    ImageComponent longerline3pic
      image = Stimuli/Training/longerline3.jpg
      saveStartStop = False
      size = 1.9,1
      startVal [time (s)] = 0.0
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    PolygonComponent longerline3area
      pos = 0.49, -0.3
      saveStartStop = False
      shape = rectangle
      size = (1, 0.17)
      startVal [time (s)] = 0.0
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    TextboxComponent Longerlinetext3
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Elige la LINEA MÁS LARGA!
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    MouseComponent longerline3mouse
      clickable = longerline3area
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine longerline_2
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    ImageComponent longerline2pic
      image = Stimuli/Training/longerline2.jpg
      saveStartStop = False
      size = 1.9,1
      startVal [time (s)] = 0.0
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    PolygonComponent longerline2area
      pos = 0.5, 0.24
      saveStartStop = False
      shape = rectangle
      size = (0.72, 0.37)
      startVal [time (s)] = 0.0
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    TextboxComponent Longerlinetext2
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Elige la LINEA MÁS LARGA!
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    MouseComponent longerline2mouse
      clickable = longerline2area
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine hello_training
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    PolygonComponent hellotraining_poly
      fillColor = 1.0000, -0.4588, -1.0000
      lineColor = black
      pos = (0, -0.20)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent hellomouse
      clickable = hellotraining_poly
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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    TextComponent hellotraining
      color = -0.4902, -0.1765, 0.7647
      letterHeight = 0.08
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Pero primero,
        ¡un poco de entrenamiento!


        Has click sobre el CÍRCULO ROJO
  Routine DELBOUF_INTRO
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    TextComponent DELBOUF_intro_text
      color = royalblue
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 1
      wrapWidth = 20
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      text:
        Selecciona la imagen en la que el
        circulo negro central
         que tenga
         ¡MAYOR TAMAÑO!
    SoundComponent sound_12
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = Stimuli/Instructions/DELB_INTRO.ogg
      startVal [time (s)] = 1
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    ButtonComponent START_DELBOUF
      bold = True
      borderColor = black
      borderWidth = 1
      fillColor = orangered
      forceEndRoutine = True
      letterHeight = 0.05
      pos = 0, -0.3
      saveStartStop = False
      size = 0.3, 0.15
      startVal [time (s)] = 1
      text = INICIAR
      timeRelativeTo = experiment
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  Routine TEST_DELBOUF
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    ImageComponent image_DELBOUF
      image [set every repeat] = $path
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    PolygonComponent LEFT_DELBOUF
      lineColor = red
      opacity = 0
      pos = -0.38,0
      saveStartStop = False
      shape = rectangle
      size = 0.72, 0.72
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    PolygonComponent RIGHT_DELBOUF
      lineColor = blue
      opacity = 0
      pos = 0.38, 0
      saveStartStop = False
      shape = rectangle
      size = 0.72, 0.72
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    MouseComponent mouse_DELBOUF
      clickable = LEFT_DELBOUF, RIGHT_DELBOUF
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    SoundComponent sound_13
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = Stimuli/Instructions/DELB_SHORT.ogg
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
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    EyetrackerRecordComponent DELBOUF_tracker
      actionType = Start and Stop
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      stopWithRoutine = False
      syncScreenRefresh = False
    RegionOfInterestComponent ROI_LEFT_DELBOUF
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = -0.38,0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.72, 0.72
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    RegionOfInterestComponent ROI_RIGHT_DELBOUF
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = 0.38, 0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.72, 0.72
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    KeyboardComponent key_resp_7
      allowedKeys = 'p'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      store = nothing
      syncScreenRefresh = False
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  Routine TEST_PONZO
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    ImageComponent image_PONZO
      image [set every repeat] = $path
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    PolygonComponent UP_PONZO
      lineColor = blue
      lineWidth = 3
      opacity = 0
      pos = (0,0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.8, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    PolygonComponent DOWN_PONZO
      lineColor = red
      lineWidth = 3
      opacity = 0
      pos = (0,-0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.8, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    MouseComponent mouse_PONZO
      clickable = UP_PONZO, DOWN_PONZO
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    SoundComponent sound_14
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = Stimuli/Instructions/PNZ_SHORT.ogg
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
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    EyetrackerRecordComponent DELBOUF_PONZO
      actionType = Start and Stop
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      stopWithRoutine = False
      syncScreenRefresh = False
    RegionOfInterestComponent ROI_UP_PONZO
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = (0,0.25)
      save = every look
      saveStartStop = False
      shape = rectangle
      size = (0.8, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    RegionOfInterestComponent ROI_DOWN_PONZO
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = (0,-0.25)
      save = every look
      saveStartStop = False
      shape = rectangle
      size = (0.8, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    KeyboardComponent key_resp_8
      allowedKeys = 'p'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      store = nothing
      syncScreenRefresh = False
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  Routine PONZO_INTRO
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    TextComponent PONZO_intro_text
      color = royalblue
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 1
      wrapWidth = 20
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      text:
        Elige la linea naranja
        ¡MAS LARGA!
    SoundComponent sound_15
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = Stimuli/Instructions/PNZ_INTRO.ogg
      startVal [time (s)] = 1
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    ButtonComponent START_PONZO
      bold = True
      borderColor = black
      borderWidth = 1
      fillColor = orangered
      forceEndRoutine = True
      letterHeight = 0.05
      pos = 0, -0.3
      saveStartStop = False
      size = 0.3, 0.15
      startVal [time (s)] = 1
      text = INICIAR
      timeRelativeTo = experiment
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  Routine TEST_SOLITAIRE
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    ImageComponent image_SOLITAIRE
      image [set every repeat] = $path
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    PolygonComponent LEFT_SOLITAIRE
      lineColor = red
      opacity = 0
      pos = -0.4,0
      saveStartStop = False
      shape = rectangle
      size = 0.7, 0.7
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    PolygonComponent RIGHT_SOLITAIRE
      lineColor = blue
      opacity = 0
      pos = 0.4, 0
      saveStartStop = False
      shape = rectangle
      size = 0.7, 0.7
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    MouseComponent mouse_SOLITAIRE
      clickable = LEFT_SOLITAIRE, RIGHT_SOLITAIRE
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    SoundComponent sound_16
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = Stimuli/Instructions/SOL_SHORT.ogg
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
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    EyetrackerRecordComponent SOLITAIRE_tracker
      actionType = Start and Stop
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      stopWithRoutine = False
      syncScreenRefresh = False
    RegionOfInterestComponent ROI_LEFT_SOLITAIRE
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = -0.4,0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.7, 0.7
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    RegionOfInterestComponent ROI_RIGHT_SOLITAIRE
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = 0.4, 0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.7, 0.7
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    KeyboardComponent key_resp_9
      allowedKeys = 'p'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      store = nothing
      syncScreenRefresh = False
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  Routine SOLITAIRE_INTRO
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    TextComponent SOLITAIRE_intro_text
      color = royalblue
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 1
      wrapWidth = 20
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      text:
        Elige la imagen que contenga
         la MAYOR
        cantidad de
         círculos negros.
    SoundComponent sound_17
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = Stimuli/Instructions/SOL_INTRO.ogg
      startVal [time (s)] = 1
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    ButtonComponent START_SOLITAIRE
      bold = True
      borderColor = black
      borderWidth = 1
      fillColor = orangered
      forceEndRoutine = True
      letterHeight = 0.05
      pos = 0, -0.3
      saveStartStop = False
      size = 0.3, 0.15
      startVal [time (s)] = 1
      text = INICIAR
      timeRelativeTo = experiment
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  Routine TEST_MS_2
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    ImageComponent image_MS_2
      image [set every repeat] = $path
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    MouseComponent mouse_MS_2
      clickable = button_YES, button_NO
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    SoundComponent sound_18
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = Stimuli/Instructions/SNK_SHORT.ogg
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
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    EyetrackerRecordComponent MS_2_tracker
      actionType = Start and Stop
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      stopWithRoutine = False
      syncScreenRefresh = False
    KeyboardComponent key_resp_10
      allowedKeys = 'p'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      store = nothing
      syncScreenRefresh = False
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    ButtonComponent button_YES
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      fillColor = red
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.55, -0.35)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
      text = SI
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    ButtonComponent button_NO
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      fillColor = red
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.55, -0.34)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
      text = NO
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  Routine MS_INTRO_2
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    TextComponent MS_2_intro_text
      color = royalblue
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 1
      wrapWidth = 20
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      text:
        Si logras percibir movimiento
        en la siguiente imagen
        selecciona “SI”,
         de lo contrario
        selecciona “NO”.
    SoundComponent sound_19
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = Stimuli/Instructions/SNK_INTRO.ogg
      startVal [time (s)] = 1
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    ButtonComponent START_MS_2
      bold = True
      borderColor = black
      borderWidth = 1
      fillColor = orangered
      forceEndRoutine = True
      letterHeight = 0.05
      pos = 0, -0.3
      saveStartStop = False
      size = 0.3, 0.15
      startVal [time (s)] = 1
      text = INICIAR
      timeRelativeTo = experiment
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Flow
  Routine hello
  Routine hello_training
  Routine longerline_1
  Routine longerline_2
  Routine longerline_3
  Routine clickcircle1
  Routine clickcircle2
  Routine clickcircle3
  Routine clickcircle4
  Routine clickcircle5
  Routine clickcircle6
  Routine clickcircle7
  Routine clickcircle8
  Routine clickcircle9
  Routine clickcircle10
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Stimuli/randomblock.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'ML_repeat': 1, 'contrast_repeat': 0, 'ebbing_repeat': 0, 'kanizsa_repeat': 0, 'MS_repeat': 0},
      {'ML_repeat': 0, 'contrast_repeat': 1, 'ebbing_repeat': 0, 'kanizsa_repeat': 0, 'MS_repeat': 0},
      {'ML_repeat': 0, 'contrast_repeat': 0, 'ebbing_repeat': 1, 'kanizsa_repeat': 0, 'MS_repeat': 0},
      {'ML_repeat': 0, 'contrast_repeat': 0, 'ebbing_repeat': 0, 'kanizsa_repeat': 1, 'MS_repeat': 0},
      {'ML_repeat': 0, 'contrast_repeat': 0, 'ebbing_repeat': 0, 'kanizsa_repeat': 0, 'MS_repeat': 1}]
    LoopInitiator A loopType="TrialHandler"
      loopType = random
      nReps = ML_repeat
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      Routine ML_INTRO
      LoopInitiator ML_rep loopType="TrialHandler"
        Selected rows = $set_rows_ML
        conditionsFile = Stimuli/Müller-Lyer trials/ML_condition_file.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'image': '100iw_70iw.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Müller-Lyer trials\\100iw_70iw.png', 'correctansweris': 'longer', 'pair_id': 'ML_01', 'variant': 'normal', 'name': 'control_inward'},
          {'image': '100iw_70iw_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Müller-Lyer trials\\100iw_70iw_R.png', 'correctansweris': 'longer', 'pair_id': 'ML_01', 'variant': 'reversed', 'name': 'control_inward'},
          {'image': '100iw_80iw.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Müller-Lyer trials\\100iw_80iw.png', 'correctansweris': 'longer', 'pair_id': 'ML_02', 'variant': 'normal', 'name': 'control_inward'},
          {'image': '100iw_80iw_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Müller-Lyer trials\\100iw_80iw_R.png', 'correctansweris': 'longer', 'pair_id': 'ML_02', 'variant': 'reversed', 'name': 'control_inward'},
          {'image': '100iw_85iw.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Müller-Lyer trials\\100iw_85iw.png', 'correctansweris': 'longer', 'pair_id': 'ML_03', 'variant': 'normal', 'name': 'control_inward'},
          {'image': '100iw_85iw_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Müller-Lyer trials\\100iw_85iw_R.png', 'correctansweris': 'longer', 'pair_id': 'ML_03', 'variant': 'reversed', 'name': 'control_inward'},
          {'image': '100iw_90iw.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Müller-Lyer trials\\100iw_90iw.png', 'correctansweris': 'longer', 'pair_id': 'ML_04', 'variant': 'normal', 'name': 'control_inward'}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
        Routine TEST_ML
        Routine pressspace
      LoopTerminator ML_rep
    LoopTerminator A
    LoopInitiator B loopType="TrialHandler"
      loopType = random
      nReps = contrast_repeat
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      Routine Contrast_illusion_INTRO
      LoopInitiator contrast_rep loopType="TrialHandler"
        Selected rows = $set_rows_contrast
        conditionsFile = Stimuli/Contrast trials/Contrast_condition_file.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'image': 'D45_L55.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Contrast trials\\D45_L55.png', 'correctansweris': 'darker', 'pair_id': 'contrast_01', 'variant': 'normal', 'name': 'misleading'},
          {'image': 'D45_L55_R.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Contrast trials\\D45_L55_R.png', 'correctansweris': 'darker', 'pair_id': 'contrast_01', 'variant': 'reversed', 'name': 'misleading'},
          {'image': 'D47_L53.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Contrast trials\\D47_L53.png', 'correctansweris': 'darker', 'pair_id': 'contrast_02', 'variant': 'normal', 'name': 'misleading'},
          {'image': 'D47_L53_R.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Contrast trials\\D47_L53_R.png', 'correctansweris': 'darker', 'pair_id': 'contrast_02', 'variant': 'reversed', 'name': 'misleading'},
          {'image': 'D48_L52.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Contrast trials\\D48_L52.png', 'correctansweris': 'darker', 'pair_id': 'contrast_03', 'variant': 'normal', 'name': 'misleading'},
          {'image': 'D48_L52_R.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Contrast trials\\D48_L52_R.png', 'correctansweris': 'darker', 'pair_id': 'contrast_03', 'variant': 'reversed', 'name': 'misleading'},
          {'image': 'D49_L51.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Contrast trials\\D49_L51.png', 'correctansweris': 'darker', 'pair_id': 'contrast_04', 'variant': 'normal', 'name': 'misleading'}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
        Routine TEST_contrast
        Routine pressspace
      LoopTerminator contrast_rep
    LoopTerminator B
    LoopInitiator C loopType="TrialHandler"
      loopType = random
      nReps = ebbing_repeat
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      Routine Ebbing_INTRO
      LoopInitiator ebbing_rep loopType="TrialHandler"
        Selected rows = $set_rows_ebbinghaus
        conditionsFile = Stimuli/Ebbinghaus trials/Ebbinghaus_condition_file.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'image': '100b_70b.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Ebbinghaus trials\\100b_70b.png', 'correctansweris': 'bigger', 'pair_id': 'ebbinghaus_01', 'variant': 'normal', 'name': 'control_large'},
          {'image': '100b_70b_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Ebbinghaus trials\\100b_70b_R.png', 'correctansweris': 'bigger', 'pair_id': 'ebbinghaus_01', 'variant': 'reversed', 'name': 'control_large'},
          {'image': '100b_70s.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Ebbinghaus trials\\100b_70s.png', 'correctansweris': 'bigger', 'pair_id': 'ebbinghaus_02', 'variant': 'normal', 'name': 'misleading'},
          {'image': '100b_70s_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Ebbinghaus trials\\100b_70s_R.png', 'correctansweris': 'bigger', 'pair_id': 'ebbinghaus_02', 'variant': 'reversed', 'name': 'misleading'},
          {'image': '100b_80b.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Ebbinghaus trials\\100b_80b.png', 'correctansweris': 'bigger', 'pair_id': 'ebbinghaus_03', 'variant': 'normal', 'name': 'control_large'},
          {'image': '100b_80b_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Ebbinghaus trials\\100b_80b_R.png', 'correctansweris': 'bigger', 'pair_id': 'ebbinghaus_03', 'variant': 'reversed', 'name': 'control_large'},
          {'image': '100b_80s.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Ebbinghaus trials\\100b_80s.png', 'correctansweris': 'bigger', 'pair_id': 'ebbinghaus_04', 'variant': 'normal', 'name': 'misleading'}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
        Routine TEST_ebbing
        Routine pressspace
      LoopTerminator ebbing_rep
    LoopTerminator C
    LoopInitiator D loopType="TrialHandler"
      loopType = random
      nReps = kanizsa_repeat
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      Routine Kanizsa_INTRO
      Routine trainingKZS
      Routine trainingKZS_2
      LoopInitiator KN_rep loopType="TrialHandler"
        Selected rows = $set_rows_kanizsa
        conditionsFile = Stimuli/Kanizsa trials/KN_condition_file.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'image': 'Kanizsa 10a.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Kanizsa trials\\Kanizsa 10a.png', 'correctansweris': 'isthere', 'pair_id': 'KN_01', 'variant': 'normal', 'context': 'illusion', 'name': 'Illusion_10'},
          {'image': 'Kanizsa 10a_R.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Kanizsa trials\\Kanizsa 10a_R.png', 'correctansweris': 'isthere', 'pair_id': 'KN_01', 'variant': 'reversed', 'context': 'illusion', 'name': 'Illusion_10'},
          {'image': 'Kanizsa 10b.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Kanizsa trials\\Kanizsa 10b.png', 'correctansweris': 'isthere', 'pair_id': 'KN_02', 'variant': 'normal', 'context': 'illusion', 'name': 'Illusion_10'},
          {'image': 'Kanizsa 10b_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Kanizsa trials\\Kanizsa 10b_R.png', 'correctansweris': 'isthere', 'pair_id': 'KN_02', 'variant': 'reversed', 'context': 'illusion', 'name': 'Illusion_10'},
          {'image': 'Kanizsa 10c.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Kanizsa trials\\Kanizsa 10c.png', 'correctansweris': 'isthere', 'pair_id': 'KN_03', 'variant': 'normal', 'context': 'illusion', 'name': 'Illusion_10'},
          {'image': 'Kanizsa 10c_R.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Kanizsa trials\\Kanizsa 10c_R.png', 'correctansweris': 'isthere', 'pair_id': 'KN_03', 'variant': 'reversed', 'context': 'illusion', 'name': 'Illusion_10'}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
        Routine TEST_knzs
        Routine pressspace
      LoopTerminator KN_rep
    LoopTerminator D
    LoopInitiator E loopType="TrialHandler"
      loopType = random
      nReps = MS_repeat
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      conditions:
        [{'image': 'moving snake 1.png', 'correctanswer': 'YES', 'path': 'Stimuli\\Moving snake trials v2\\moving snake 1.png', 'correctansweris': 'itmoves', 'set': 'B'},
        {'image': 'moving snake 2.png', 'correctanswer': 'YES', 'path': 'Stimuli\\Moving snake trials v2\\moving snake 2.png', 'correctansweris': 'itmoves', 'set': 'B'},
        {'image': 'moving snake 3.png', 'correctanswer': 'YES', 'path': 'Stimuli\\Moving snake trials v2\\moving snake 3.png', 'correctansweris': 'itmoves', 'set': 'B'},
        {'image': 'moving snake 4.png', 'correctanswer': 'YES', 'path': 'Stimuli\\Moving snake trials v2\\moving snake 4.png', 'correctansweris': 'itmoves', 'set': 'B'},
        {'image': 'moving snake 5.png', 'correctanswer': 'NO', 'path': 'Stimuli\\Moving snake trials v2\\moving snake 5.png', 'correctansweris': 'itmoves', 'set': 'B'}]
      Routine MS_INTRO_2
      LoopInitiator trials_2 loopType="TrialHandler"
        conditionsFile = Stimuli/Moving snake trials v2/MS_condition_file.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'image': 'moving snake 1.png', 'correctanswer': 'YES', 'path': 'Stimuli\\Moving snake trials v2\\moving snake 1.png', 'correctansweris': 'itmoves', 'pair_id': 'MS_1', 'variant': 'normal', 'name': 'illusion'},
          {'image': 'moving snake 2.png', 'correctanswer': 'YES', 'path': 'Stimuli\\Moving snake trials v2\\moving snake 2.png', 'correctansweris': 'itmoves', 'pair_id': 'MS_2', 'variant': 'reversed', 'name': 'illusion'},
          {'image': 'moving snake 3.png', 'correctanswer': 'YES', 'path': 'Stimuli\\Moving snake trials v2\\moving snake 3.png', 'correctansweris': 'itmoves', 'pair_id': 'MS_3', 'variant': 'normal', 'name': 'illusion'},
          {'image': 'moving snake 4.png', 'correctanswer': 'YES', 'path': 'Stimuli\\Moving snake trials v2\\moving snake 4.png', 'correctansweris': 'itmoves', 'pair_id': 'MS_4', 'variant': 'reversed', 'name': 'illusion'},
          {'image': 'moving snake 5.png', 'correctanswer': 'NO', 'path': 'Stimuli\\Moving snake trials v2\\moving snake 5.png', 'correctansweris': 'itmoves', 'pair_id': 'MS_5', 'variant': 'normal', 'name': 'illusion'},
          {'image': 'moving snake 1_R.png', 'correctanswer': 'YES', 'path': 'Stimuli\\Moving snake trials v2\\moving snake 1_R.png', 'correctansweris': 'itmoves', 'pair_id': 'MS_1', 'variant': 'reversed', 'name': 'illusion'},
          {'image': 'moving snake 2_R.png', 'correctanswer': 'YES', 'path': 'Stimuli\\Moving snake trials v2\\moving snake 2_R.png', 'correctansweris': 'itmoves', 'pair_id': 'MS_2', 'variant': 'normal', 'name': 'illusion'}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
        Routine TEST_MS_2
        Routine pressspace
      LoopTerminator trials_2
    LoopTerminator E
    LoopInitiator F loopType="TrialHandler"
      loopType = random
      nReps = delbouf_repeat
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      Routine DELBOUF_INTRO
      LoopInitiator DELBOUF_rep loopType="TrialHandler"
        Selected rows = $set_rows_delboeuf
        conditionsFile = Stimuli/Delboeuf trials/Delboeuf_condition_file.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'image': '100b_70b.png', 'path': 'Stimuli\\Delboeuf trials\\100b_70b.png', 'correctanswer': 'RIGHT', 'correctansweris': 'bigger', 'pair_id': 'delboeuf_01', 'variant': 'normal', 'name': 'control_large'},
          {'image': '100b_70b_R.png', 'path': 'Stimuli\\Delboeuf trials\\100b_70b_R.png', 'correctanswer': 'LEFT', 'correctansweris': 'bigger', 'pair_id': 'delboeuf_01', 'variant': 'reversed', 'name': 'control_large'},
          {'image': '100b_70s.png', 'path': 'Stimuli\\Delboeuf trials\\100b_70s.png', 'correctanswer': 'RIGHT', 'correctansweris': 'bigger', 'pair_id': 'delboeuf_02', 'variant': 'normal', 'name': 'misleading'},
          {'image': '100b_70s_R.png', 'path': 'Stimuli\\Delboeuf trials\\100b_70s_R.png', 'correctanswer': 'LEFT', 'correctansweris': 'bigger', 'pair_id': 'delboeuf_02', 'variant': 'reversed', 'name': 'misleading'},
          {'image': '100b_80b.png', 'path': 'Stimuli\\Delboeuf trials\\100b_80b.png', 'correctanswer': 'RIGHT', 'correctansweris': 'bigger', 'pair_id': 'delboeuf_03', 'variant': 'normal', 'name': 'control_large'},
          {'image': '100b_80b_R.png', 'path': 'Stimuli\\Delboeuf trials\\100b_80b_R.png', 'correctanswer': 'LEFT', 'correctansweris': 'bigger', 'pair_id': 'delboeuf_03', 'variant': 'reversed', 'name': 'control_large'},
          {'image': '100b_80s.png', 'path': 'Stimuli\\Delboeuf trials\\100b_80s.png', 'correctanswer': 'RIGHT', 'correctansweris': 'bigger', 'pair_id': 'delboeuf_04', 'variant': 'normal', 'name': 'misleading'}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
        Routine TEST_DELBOUF
        Routine pressspace
      LoopTerminator DELBOUF_rep
    LoopTerminator F
    LoopInitiator G loopType="TrialHandler"
      loopType = random
      nReps = ponzo_repeat
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      Routine PONZO_INTRO
      LoopInitiator PONZO_rep loopType="TrialHandler"
        Selected rows = $set_rows_ponzo
        conditionsFile = Stimuli/Ponzo trials/Ponzo_condition_file.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'image': 'far70.png', 'path': 'Stimuli\\Ponzo trials\\far70.png', 'correctanswer': 'DOWN', 'correctansweris': 'longer', 'pair_id': 'ponzo_c', 'variant': 'normal', 'name': 'misleading'},
          {'image': 'far80.png', 'path': 'Stimuli\\Ponzo trials\\far80.png', 'correctanswer': 'DOWN', 'correctansweris': 'longer', 'pair_id': 'ponzo_c', 'variant': 'normal', 'name': 'misleading'},
          {'image': 'far85.png', 'path': 'Stimuli\\Ponzo trials\\far85.png', 'correctanswer': 'DOWN', 'correctansweris': 'longer', 'pair_id': 'ponzo_c', 'variant': 'normal', 'name': 'misleading'},
          {'image': 'far90.png', 'path': 'Stimuli\\Ponzo trials\\far90.png', 'correctanswer': 'DOWN', 'correctansweris': 'longer', 'pair_id': 'ponzo_c', 'variant': 'normal', 'name': 'misleading'},
          {'image': 'far95.png', 'path': 'Stimuli\\Ponzo trials\\far95.png', 'correctanswer': 'DOWN', 'correctansweris': 'longer', 'pair_id': 'ponzo_c', 'variant': 'normal', 'name': 'misleading'},
          {'image': 'far99.png', 'path': 'Stimuli\\Ponzo trials\\far99.png', 'correctanswer': 'DOWN', 'correctansweris': 'longer', 'pair_id': 'ponzo_c', 'variant': 'normal', 'name': 'misleading'},
          {'image': 'control_down70.png', 'path': 'Stimuli\\Ponzo trials\\control_down70.png', 'correctanswer': 'UP', 'correctansweris': 'longer', 'pair_id': 'ponzo_01', 'variant': 'normal', 'name': 'control'}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
        Routine TEST_PONZO
        Routine pressspace
      LoopTerminator PONZO_rep
    LoopTerminator G
    LoopInitiator H loopType="TrialHandler"
      loopType = random
      nReps = solitaire_repeat
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      Routine SOLITAIRE_INTRO
      LoopInitiator SOLITAIRE_rep loopType="TrialHandler"
        Selected rows = $set_rows_solitaire
        conditionsFile = Stimuli/Solitaire trials/Solitaire_condition_file.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'image': 'random_48_random_49.png', 'path': 'Stimuli\\Solitaire trials\\random_48_random_49.png', 'correctanswer': 'RIGHT', 'correctansweris': 'more', 'pair_id': 'solitaire_01', 'variant': 'normal', 'name': 'control'},
          {'image': 'Out_49_In_48.png', 'path': 'Stimuli\\Solitaire trials\\Out_49_In_48.png', 'correctanswer': 'LEFT', 'correctansweris': 'more', 'pair_id': 'solitaire_02', 'variant': 'reversed', 'name': 'misleading'},
          {'image': 'Out_50_In_47.png', 'path': 'Stimuli\\Solitaire trials\\Out_50_In_47.png', 'correctanswer': 'LEFT', 'correctansweris': 'more', 'pair_id': 'solitaire_03', 'variant': 'reversed', 'name': 'misleading'},
          {'image': 'Out_51_In_46.png', 'path': 'Stimuli\\Solitaire trials\\Out_51_In_46.png', 'correctanswer': 'LEFT', 'correctansweris': 'more', 'pair_id': 'solitaire_04', 'variant': 'reversed', 'name': 'misleading'},
          {'image': 'Out_52_In_45.png', 'path': 'Stimuli\\Solitaire trials\\Out_52_In_45.png', 'correctanswer': 'LEFT', 'correctansweris': 'more', 'pair_id': 'solitaire_05', 'variant': 'reversed', 'name': 'misleading'},
          {'image': 'Out_53_In_44.png', 'path': 'Stimuli\\Solitaire trials\\Out_53_In_44.png', 'correctanswer': 'LEFT', 'correctansweris': 'more', 'pair_id': 'solitaire_06', 'variant': 'reversed', 'name': 'misleading'},
          {'image': 'Out_54_In_43.png', 'path': 'Stimuli\\Solitaire trials\\Out_54_In_43.png', 'correctanswer': 'LEFT', 'correctansweris': 'more', 'pair_id': 'solitaire_07', 'variant': 'reversed', 'name': 'misleading'}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
        Routine TEST_SOLITAIRE
        Routine pressspace
      LoopTerminator SOLITAIRE_rep
    LoopTerminator H
  LoopTerminator trials
  Routine bye
